PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = gonogo
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent trial_polygon
      fillColor [set every repeat] = $colour
      lineColor [set every repeat] = $colour
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent trial_resp
      allowedKeys = 'space'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Press Space to begin.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instr
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_instructions
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    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine distractor_probe
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    PolygonComponent distractor_probe_cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent distractor_probe_text
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = On which side did the white circle appear?
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    KeyboardComponent distractor_probe_resp
      allowedKeys = 'left','right'
      correctAns = $distractorSide
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine fin
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The experiment is now over.
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  Routine fix_distractor
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    PolygonComponent fix_distractor_cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent fix_distractor_circle
      fillColor = white
      pos [set every repeat] = distractorPos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine end_of_block
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    TextComponent end_of_block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $"End of block " + str(block)
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Flow
  Routine intro
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions_files/blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'conditionsFile': 'conditions_files/block_1.xlsx', 'block_instructions': 'For the next block, your task is to press Space when the a Green circle appears, and do nothing when a Red circle appears.'},
      {'conditionsFile': 'conditions_files/block_2.xlsx', 'block_instructions': 'For the next block, your task is to press Space when the a Red circle appears, and do nothing when a Green circle appears.'}]
    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditionsFile
      loopType = random
      nReps = 1
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      conditions:
        [{'conditionsFile': 'conditions_file/block_1.xlsx', 'block_instructions': 'For the next block, your task is to press Space when the a Green circle appears, and do nothing when a Red circle appears.'},
        {'conditionsFile': 'conditions_file/block_2.xlsx', 'block_instructions': 'For the next block, your task is to press Space when the a Red circle appears, and do nothing when a Green circle appears.'}]
      Routine fixation
      Routine trial
    LoopTerminator trials
    Routine end_of_block
  LoopTerminator blocks
  Routine fin
