PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'nTrials': '[5, 10, 15, 20]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = direction
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # durations (seconds)

        fixDur = 0.5
        stimDur = 0.5
        respDur = 1

        # stimuli params

        polySize = 0.1 # can take one value for x & y
        polyDur = 1.5
        polyColour = "white"

        # text params

        textHeight = 0.05
        textColour = "white"

        # position of intro text

        introPos = (0, 0)
  Routine intro
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    TextComponent intro_text
      color = $textColour
      letterHeight = textHeight
      pos = introPos
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. Please respond to the position of the white circle using the arrow keys, as quickly and accurately as possible.

        Press Space to begin.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation_cross
      durationEstim = 0.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixDur
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        trialCounter = 0
      Begin Routine:
        trialCounter += 1
      End Routine:
        if trialCounter == int(expInfo['nTrials']):
            continueRoutine = False
            trials.finished = True
    CodeComponent trial_repeat
      Code Type = Auto->JS
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      Begin Experiment:
        previousTrial = 0
      Begin Routine:
        matchesPrevious = "no"

        if previousTrial == correctAns:
            matchesPrevious = "yes"

        thisExp.addData("is_match", matchesPrevious)
      End Routine:
        previousTrial = correctAns
    PolygonComponent trial_polygon
      durationEstim = 1.5
      fillColor = $polyColour
      lineColor = $polyColour
      pos [set every repeat] = position
      shape = circle
      size = polySize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = polyDur
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    KeyboardComponent trial_resp
      allowedKeys = 'left', 'right', 'up', 'down'
      correctAns = $correctAns
      durationEstim = 1.5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = polyDur
      storeCorrect = True
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Flow
  Routine setup
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_files/trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'}]
    Routine fixation
    Routine trial
  LoopTerminator trials
