PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'how many repeats?': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/A1.png', 'stimuli/A3.png', 'stimuli/A4.png', 'stimuli/A5.png', 'stimuli/A8.png', 'conditions_files/stim_names.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = randomisation
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # durations (seconds)

        fixDur = 0.5
        stimDur = 0.5
        respDur = 1

        # text params

        textHeight = 0.05
        textColour = "white"

        # repeats
        nRepeats = expInfo['how many repeats?']
  Routine load_stimuli
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    CodeComponent load_stimuli_code
      Code Type = Auto->JS
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      Begin Experiment:
        stimList = []
      Begin Routine:
        stimList.append(path)

        print(path)
  Routine intro
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    TextComponent intro_text
      color = $textColour
      letterHeight = textHeight
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. Respond to each image with the left or right arrow key.

        Press Space to begin.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fixation
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    PolygonComponent fixation_cross
      durationEstim = 0.5
      fillColor = white
      shape = cross
      size = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixDur
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  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        stim = stimList[trials.thisN]
        print(stim)
        thisExp.addData("stimulus shown", stim)
      End Routine:
        previousStim = stimList[trials.thisN]
    ImageComponent trial_image
      durationEstim = 0.5
      image [set every repeat] = $stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDur
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    KeyboardComponent trial_resp
      allowedKeys = 'left', 'right'
      durationEstim = 1.5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = respDur
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  Routine fin
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    TextComponent fin_text
      color = $textColour
      letterHeight = textHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The experiment is now over.
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    KeyboardComponent fin_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine randomise_stimuli
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    CodeComponent randomise_stimuli_code
      Code Type = Auto->JS
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      Begin Routine:
        nLoops = len(stimList)

        re_shuffle = False

        for i in range(len(stimList)):
            if stimList[i] == stimList[i-1]:
                re_shuffle = True

        while re_shuffle:
            shuffle(stimList)
            re_shuffle = False
            for i in range(len(stimList)):
                if stimList[i] == stimList[i-1]:
                    re_shuffle = True
Flow
  Routine setup
  LoopInitiator load_stimuli_loop loopType="TrialHandler"
    conditionsFile = conditions_files/stim_names.xlsx
    loopType = fullRandom
    nReps = nRepeats
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    conditions:
      [{'path': 'stimuli/A1.png'},
      {'path': 'stimuli/A3.png'},
      {'path': 'stimuli/A4.png'},
      {'path': 'stimuli/A5.png'},
      {'path': 'stimuli/A8.png'}]
    Routine load_stimuli
  LoopTerminator load_stimuli_loop
  Routine randomise_stimuli
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = nLoops
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    conditions:
      [{'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'},
      {'position': [-0.25, 0], 'correctAns': 'left'},
      {'position': [0.25, 0], 'correctAns': 'right'},
      {'position': [0, 0.25], 'correctAns': 'up'},
      {'position': [0, -0.25], 'correctAns': 'down'}]
    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine fin
