PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'how many crosses?': '10', 'radius': '0.4', 'cross size': '0.05'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = coding
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        radius = float(expInfo['radius'])
        crossSize = expInfo['cross size']
        nCrosses = int(expInfo['how many crosses?'])

        resetSize = (0.15, 0.1)
        resetPos = (0.5, -0.4)

        spinOri = 0
        ori = 0
        cross = 0
        angle = 0
  Routine trial
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    CodeComponent trial_clock
      Code Type = Auto->JS
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      Begin Experiment:
        main_clock = core.Clock()
      Begin Routine:
        currentTime = str(main_clock.getTime())

        clockText = ""
      Each Frame:
        currentTime = str(round(main_clock.getTime(), 2))
        sinceReset = str(round(t, 2))

        clockText = "Time since start: " +\
        str(currentTime) +\
        "\nSince refresh: " +\
        str(sinceReset) +\
        "\nPosition: "
    CodeComponent trial_clock_PY
      Code Type = Py
      Each Frame:
        clockText += str(round(trial_slider.getMarkerPos(), 5))
    CodeComponent trial_trig_JS
      Code Type = JS
      Each JS Frame:
        ori += (trial_mouse.getPos()[0] + (trial_mouse.getPos()[1] % 360));
    CodeComponent trial_trig_PY
      Code Type = Py
      Each Frame:
        ori = 360 * trial_slider.getMarkerPos()
    CodeComponent trial_trig
      Code Type = Auto->JS
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      Each Frame:
        crossPositions = []
        for i in range(len(crosses)):
            angle = 360 / len(crosses)
            # For each of 10 reps, list will append with a list containing 2 elements (X and Y coordinates)
            crossPositions.append([radius * sin((((i * angle) + ori)%360)* pi / 180), radius * cos((((i * angle) + ori)%360) * pi / 180)])
    CodeComponent trial_crosses
      Code Type = Auto->JS
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      Begin Experiment:
        # Create a list to store the dots
        crosses = []

        # Create 10 circle polygons and store them in the list
        for i in range(nCrosses):
            cross = visual.ShapeStim(
                win=win, name=str(i),
                size=crossSize, vertices='cross',
                ori=0, pos=(0, 0), anchor='center',
                lineWidth=1.0, colorSpace='rgb', lineColor='white', fillColor='white',
                opacity=None, depth=-6.0, interpolate=True)
            # add object to list
            crosses.append(cross)
            # set object to draw each frame
            crosses[i].setAutoDraw(True)
      Each Frame:
        for i in range(len(crosses)):
            crosses[i].pos = crossPositions[i]
            crosses[i].ori = spinOri

        spinOri += 1
        spinOri = spinOri % 360
    SliderComponent trial_slider
      fillColor = White
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 1
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    MouseComponent trial_mouse
      clickable = trial_reset
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent trial_textbox
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.05
      lineSpacing = 0.5
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $clockText
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    PolygonComponent trial_reset
      fillColor = blue
      lineColor = blue
      pos = resetPos
      shape = rectangle
      size = resetSize
      startVal [time (s)] = 0.0
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    TextboxComponent trial_reset_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = resetPos
      size = resetSize
      startVal [time (s)] = 0.0
      text = reset
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Flow
  Routine setup
  LoopInitiator trials_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 9999
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    Routine trial
  LoopTerminator trials_loop
