PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'debug': 'False'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = template
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        ratingList = ['bad', 'neutral', 'good']

        # Parameters for text (instructions etc.)
        textHeight = 0.05
        textPos = (0, 0)
        textColour = "white"

        # Parameters for continue button
        continueSize = (0.3, 0.1)
        continuePos = (0.5, -0.35)
        continueColour = "blue"

        # Duration for fixtion cross
        fixSize = 0.05
        fixPos = (0, 0)
        fixDur = 0.5

        # Parameters for stimuli
        stimSize = (0.5, 0.5)
        stimPos = (0, 0)
        stimDur = 1.5

        # Parameters for rating slider
        sliderSize = (1.0, 0.075)
        sliderPos = (0, -0.35)

        # Frequency of breaks
        breakEvery = 4

        """
        For debugging purposes, we may want to keep
        the stimulus on-screen for a longer time:
        """

        # debug
        if expInfo['debug'] == True:
            stimDur = 999
  Routine intro
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    TextComponent intro_text
      color = $textColour
      letterHeight = textHeight
      pos = textPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Welcome to the experiment.
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    PolygonComponent intro_polygon
      fillColor = blue
      lineColor = blue
      pos = continuePos
      saveStartStop = False
      shape = rectangle
      size = continueSize
      startVal [time (s)] = 0.0
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    TextComponent intro_continue
      color = $textColour
      letterHeight = textHeight
      pos = continuePos
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent intro_mouse
      clickable = intro_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr
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    TextComponent instr_text
      color = $textColour
      letterHeight = textHeight
      pos = textPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrText
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    PolygonComponent instr_polygon
      fillColor = $continueColour
      lineColor = $continueColour
      pos = continuePos
      saveStartStop = False
      shape = rectangle
      size = continueSize
      startVal [time (s)] = 0.0
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    TextComponent instr_continue
      color = $textColour
      letterHeight = textHeight
      pos = continuePos
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent instr_mouse
      clickable = intro_polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent debug_code
      Code Type = Auto->JS
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      Begin Experiment:
        debugText = ""
      Begin Routine:
        if expInfo['debug'] == True:
            print("debug text being generated")
            debugText = str(block)
            debugText += "\n\n" # 2 x Newline
            debugText += stim
    ImageComponent trial_image
      durationEstim = 1.5
      image [set every repeat] = $stim
      pos = stimPos
      size = stimSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = stimDur
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    SliderComponent trial_slider
      forceEndRoutine = True
      granularity = 0
      labels = ratingList
      letterHeight = textHeight*0.5
      pos = sliderPos
      size = sliderSize
      startVal [time (s)] = 0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    TextComponent debug_text
      color = $textColour
      durationEstim = 1.5
      letterHeight = textHeight
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = stimDur
      text [set every repeat] = $debugText
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  Routine debrief
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    TextComponent debrief_text
      color = $textColour
      letterHeight = textHeight
      pos = textPos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You have now completed the task, thank you for your participation.
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  Routine block_instr
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    TextComponent block_instr_text
      color = $textColour
      letterHeight = textHeight
      pos = textPos
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_instructions
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    PolygonComponent block_instr_polygon
      fillColor = $continueColour
      lineColor = $continueColour
      pos = continuePos
      saveStartStop = False
      shape = rectangle
      size = continueSize
      startVal [time (s)] = 0.0
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    TextComponent block_instr_continue
      color = $textColour
      letterHeight = textHeight
      pos = continuePos
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent block_instr_mouse
      clickable = instr_polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent block_instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
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    PolygonComponent fixation_polygon
      durationEstim = 0.5
      fillColor = $textColour
      pos = fixPos
      shape = cross
      size = fixSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fixDur
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  Routine rest
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    TextComponent rest_text
      color = $textColour
      letterHeight = textHeight
      pos = textPos
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Take a break.

        Please press the Space key or click the continue button once you are ready to continue with the task.
    PolygonComponent rest_polygon
      fillColor = $continueColour
      lineColor = $continueColour
      pos = continuePos
      saveStartStop = False
      shape = rectangle
      size = continueSize
      startVal [time (s)] = 0.0
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    TextComponent rest_continue
      color = $textColour
      letterHeight = textHeight
      pos = continuePos
      startVal [time (s)] = 0.0
      text = Continue
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    MouseComponent rest_mouse
      clickable = rest_polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent rest_key
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine check_for_break
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    CodeComponent cfb_code
      Code Type = Auto->JS
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      Begin Routine:
        yesBreak = 0

        if trials.thisN == breakEvery:
            yesBreak = 1
Flow
  Routine setup
  Routine intro
  LoopInitiator instr_loop loopType="TrialHandler"
    conditionsFile = conditions_files/instr_file.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'page': 1, 'instrText': 'In this experiment you will rate a series of images.'},
      {'page': 2, 'instrText': 'On each trial, please rate the image using the slider provided.'},
      {'page': 3, 'instrText': 'You will have the opportunity to practice the task first.'}]
    Routine instr
  LoopTerminator instr_loop
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions_files/blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 'prac', 'conditions_file': 'conditions_files/prac.xlsx', 'block_instructions': 'The practice block will begin on the next screen…'},
      {'block': 1, 'conditions_file': 'conditions_files/block_1.xlsx', 'block_instructions': 'The first block will begin on the next screen…'},
      {'block': 2, 'conditions_file': 'conditions_files/block_2.xlsx', 'block_instructions': 'In the next block…'}]
    Routine block_instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = random
      nReps = 1
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      Routine check_for_break
      LoopInitiator if_break loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = yesBreak
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        Routine rest
      LoopTerminator if_break
      Routine fixation
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine debrief
